PsychoPy2experiment version="2026.1.3"
<!--
  Eye Tribe Builder example for psychopy-eyetracker-eyetribe.

  Open in PsychoPy 2026.1.3 Builder. The experiment:
    1. Runs the Eye Tribe 9-point calibration (via Eyetracker component).
    2. Presents a fixation cross for 2 s while recording gaze.
    3. Writes gaze events to the PsychoPy data file.

  Prerequisites:
    - psychopy-eyetracker-eyetribe installed (pip install <wheel>).
    - Eye Tribe Server running at 127.0.0.1:6555.
    - ET1000 connected and trackerstate = 0.
-->
<!-- Eye Tribe eyetracker configuration -->
Settings
  expName = eye_tribe_builder_example
  psychopyVersion = 2026.1.3
  audioLib = use prefs
  audioDevice = use prefs
  audioLatencyMode = use prefs
  Save excel file = True
  Logging level = warning
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Screen = 1
  Units = norm
  Flip horizontal = False
  Flip vertical = False
  color = none
  eyeTracker = eyetracker.hw.eyetribe.EyeTracker
  etHost = 127.0.0.1
  etPort = 6555
  etGazeSource = 'raw'
  etCalibTargetCount = 9
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = +
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Flow
  Routine trial
