PsychoPy2experiment version="2026.1.3"
Settings
  End Message = Thank you.
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = INI_Lab
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  etCalibTargetCount = 9
  etGazeSource = raw
  etHost = 127.0.0.1
  etPort = 6555
  expName = eyetribe_demo
  eyetracker = eyetracker.hw.eyetribe.EyeTracker
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextboxComponent welcome_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Eye Tribe Demo

        This experiment demonstrates the Eye Tribe eye tracker plugin for PsychoPy.

        Steps:
          1. 9-point calibration
          2. Free-viewing with live gaze dot
          3. 9-target validation
          4. Gaze-overlay heatmap

        Press SPACE to begin.
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent clear_stale_servers
      Code Type = Py
      Before Experiment:
        # Clear any orphaned ioHub server on the fixed UDP port before launchHubServer
        from psychopy_eyetracker_eyetribe import clear_stale_servers
        clear_stale_servers()
  Routine freeview
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    EyetrackerRecordComponent et_freeview_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent freeview_instr
      letterHeight = 0.04
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text = Look around freely — press SPACE when done.
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    PolygonComponent gaze_dot_free
      fillColor = cyan
      lineColor = None
      pos [set every frame] = eyetracker.getPos() or (10, 10)
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_freeview
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine freeview_stop
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    TextComponent freeview_stop_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    EyetrackerRecordComponent et_freeview_stop
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine validation_intro
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    TextboxComponent val_intro_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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      text:
        Validation — 9 targets

        Look at each yellow dot as it appears.
        Keep your head still and maintain a comfortable distance.

        Press SPACE to start.
    KeyboardComponent key_val_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti
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    TextComponent fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine validation_trial
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    EyetrackerRecordComponent et_trial_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    PolygonComponent target_dot
      fillColor = yellow
      lineWidth = 2
      pos [set every repeat] = (target_x, target_y)
      shape = circle
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent gaze_cursor_val
      fillColor = white
      lineColor = None
      pos [set every frame] = eyetracker.getPos() or (10, 10)
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent collect_gaze
      Code Type = Py
      Before Experiment:
        _et_gaze_log = []
        _VAL_SETTLE_S = 0.5  # seconds after target onset before recording (excludes the saccade)
      Begin Routine:
        _trial_gazes = []
        _trial_n_total = 0
        _trial_n_invalid = 0
      Each Frame:
        if t >= _VAL_SETTLE_S:  # only after the settle delay (excludes the saccade)
            _trial_n_total += 1
            _pos = eyetracker.getPos()
            if _pos is not None:
                _trial_gazes.append(tuple(_pos))
            else:
                _trial_n_invalid += 1  # gaze invalid/off-screen this frame
      End Routine:
        _et_gaze_log.append({'target': (target_x, target_y), 'gazes': list(_trial_gazes),
                             'label': target_label, 'n_total': _trial_n_total,
                             'n_invalid': _trial_n_invalid})
  Routine validation_stop
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    TextComponent val_stop_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    EyetrackerRecordComponent et_trial_stop
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine heatmap
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    CodeComponent heatmap_code
      Code Type = Py
      Before Experiment:
        import json
      Begin Routine:
        # ---- Validation metrics + sample quality from the per-target gaze log ----
        # _et_gaze_log entries: {'target':(x,y) height, 'gazes':[(x,y),...], 'n_total':int, 'n_invalid':int}
        _n_total = sum(_e.get('n_total', 0) for _e in _et_gaze_log)
        _n_invalid = sum(_e.get('n_invalid', 0) for _e in _et_gaze_log)
        _n_valid = _n_total - _n_invalid
        _pct_valid = (100.0 * _n_valid / _n_total) if _n_total else float('nan')
        thisExp.addData('validation_samples_total', _n_total)
        thisExp.addData('validation_samples_valid', _n_valid)
        thisExp.addData('validation_samples_invalid', _n_invalid)
        try:
            from psychopy_eyetracker_eyetribe.eyetribe.validation import compute_accuracy, compute_precision
            _sw, _sh = int(win.size[0]), int(win.size[1])
            _width_cm = win.monitor.getWidth() or 53.1
            _dist_cm = win.monitor.getDistance() or 60.0
            _height_cm = _width_cm * (_sh / _sw)
            _targets_px, _means_px, _prec = [], [], []
            for _e in _et_gaze_log:
                _g = _e['gazes']
                if not _g:
                    continue
                _gpx = [(p[0] * _sh, p[1] * _sh) for p in _g]  # height-units -> pixels
                _means_px.append((sum(x for x, _ in _gpx) / len(_gpx), sum(y for _, y in _gpx) / len(_gpx)))
                _targets_px.append((_e['target'][0] * _sh, _e['target'][1] * _sh))
                if len(_gpx) >= 2:
                    _prec.append(compute_precision(_gpx, _sw, _sh, _width_cm, _height_cm, _dist_cm))
            _val_acc = compute_accuracy(_targets_px, _means_px, _sw, _sh, _width_cm, _height_cm, _dist_cm) if _targets_px else float('nan')
            _val_prec = (sum(_prec) / len(_prec)) if _prec else float('nan')
            thisExp.addData('validation_accuracy_deg', _val_acc)
            thisExp.addData('validation_precision_deg', _val_prec)
            logging.data('Validation: accuracy=%.3f deg precision=%.3f deg samples=%d/%d valid'
                         % (_val_acc, _val_prec, _n_valid, _n_total))
            try:
                with open(os.path.join(os.getcwd(), 'eyetribe_validation_result.json'), 'w', encoding='utf-8') as _fh:
                    json.dump({'accuracy_deg': _val_acc, 'precision_deg': _val_prec, 'n_targets': len(_targets_px),
                               'samples_total': _n_total, 'samples_valid': _n_valid, 'samples_invalid': _n_invalid,
                               'screen_px': [_sw, _sh], 'monitor_cm': [_width_cm, _height_cm],
                               'viewing_distance_cm': _dist_cm}, _fh, indent=2)
            except Exception:
                pass
            heatmap_title.setText('Gaze heatmap   |   Accuracy %.2f°   Precision %.2f°\n'
                                  'Samples: %d valid / %d total   (%d invalid, %.0f%% valid)\n'
                                  'yellow = target   red = mean gaze   cyan = samples   |   SPACE to exit'
                                  % (_val_acc, _val_prec, _n_valid, _n_total, _n_invalid, _pct_valid))
        except Exception as _exc:
            logging.warning('Validation metric computation failed: %s' % _exc)

        # ---- Build the heatmap overlay (show progress; building many stimuli can take a moment) ----
        _loading = visual.TextStim(win, text='Generating heatmap…', color='white', height=0.05, units='height')
        _loading.draw()
        win.flip()
        _heatmap_stims = []
        _MAX_DOTS = 15  # cap raw-gaze dots per target so the build/redraw stays fast
        for _entry in _et_gaze_log:
            _tx, _ty = _entry['target']
            _heatmap_stims.append(visual.Circle(win, radius=0.04, pos=(_tx, _ty), lineColor='yellow', lineWidth=2, fillColor=None, units='height'))
            _gz = _entry['gazes']
            if _gz:
                _mx = sum(g[0] for g in _gz) / len(_gz)
                _my = sum(g[1] for g in _gz) / len(_gz)
                _heatmap_stims.append(visual.Circle(win, radius=0.015, pos=(_mx, _my), fillColor='red', lineColor=None, units='height'))
                _step = max(1, len(_gz) // _MAX_DOTS)
                for _gx, _gy in _gz[::_step]:
                    _heatmap_stims.append(visual.Circle(win, radius=0.005, pos=(_gx, _gy), fillColor='cyan', lineColor=None, opacity=0.4, units='height'))
      Each Frame:
        for _s in _heatmap_stims:
            _s.draw()
    TextComponent heatmap_title
      letterHeight = 0.04
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text = Gaze overlay  |  yellow = target  red = mean gaze  cyan = samples  |  SPACE to exit
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    KeyboardComponent key_heatmap
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = white
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = green
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = red
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
    useCustom = False
Flow
  Routine welcome
  EyetrackerCalibrationRoutine calibration
  Routine freeview
  Routine freeview_stop
  Routine validation_intro
  LoopInitiator validation_loop loopType="TrialHandler"
    conditionsFile = validation_conditions.xlsx
    loopType = sequential
    nReps = 1
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    Routine iti
    Routine validation_trial
    Routine validation_stop
  LoopTerminator validation_loop
  Routine heatmap
